PsychoPy2experiment version="2022.2.0"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Experiment info = {'ghost': '0', 'participant': '', 'trials': '50', 'N_targets': '10', 'target_size': '80', 'shuffle_parameters_every': '5'}
  Full-screen window = False
  Monitor = testMonitor
  Resources = ['crosshairs_black.png', 'crosshairs_ghost.png', 'crosshairs_green.png', 'crosshairs_red.png', 'crosshairs_yellow.png', 'explosion.png']
  Screen = 1
  Units = pix
  Window size (pixels) = [640, 480]
  color = $[1,1,1]
  expName = fittslaw_revisited
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Py
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      Begin Experiment:
        import time

        polyx = 0
        polyy = 0
        viewx = 0
        viewy = 0
        startx = 0
        starty = 0
        polycol = [1,-1,-1]
        xjump=0
        yjump=0
        cursor_size = 20
        crosshair = 'crosshairs_black.png'
        ghosttail = int(expInfo['ghost'])
        buttons = 0
        times = 0
        shuffle_parameters_every = int(expInfo['shuffle_parameters_every'])
        old_target_pos_num = 0
        rotation = 0
        alltrials = int(expInfo['trials'])
        #alltrials = trials1 + int(expInfo['trials2'])+1

        mousex = 0
        mousey = 0
        jumplength = 100

        oldmousex = [0,0,0,0,0,0,0,0,0,0]
        oldmousey = [0,0,0,0,0,0,0,0,0,0]

        # helper class for mouse events

        class MouseEventHelper(object):
            def __init__(self):
                super(MouseEventHelper, self).__init__()
                self.state = False
            def isPressedIn(self, mouse, target):
                returned_state = mouse.isPressedIn(target)

                if returned_state and not self.state:
                    self.state = True
                    return True
                elif returned_state != self.state:
                    self.state = False
                    return False
                else:
                    return False

            def getPressed(self, mouse):
                returned_state = True if mouse.getPressed()[0] == 1 else False

                if returned_state and not self.state:
                    self.state = True
                    return True
                elif returned_state != self.state:
                    self.state = False
                    return False
                else:
                    return False

        mouseeventhelper = MouseEventHelper()

        N_targets = int(expInfo['N_targets']) # needs to be a function in the beginning of the exp.
        target_size = int(expInfo['target_size']) # needs to be a function in the beginning of the exp.
        target_distance_from_origin = 200
        targetpositions = []
        for i in range(N_targets):
            targetpositions.append(visual.ShapeStim(
                win=win, name='targetposition0',
                size=(target_size, target_size), vertices='circle',
                ori=0.0, pos=(target_distance_from_origin * np.cos(2*np.pi/N_targets*i), target_distance_from_origin * np.sin(2*np.pi/N_targets*i)), anchor='center',
                lineWidth=1.0,     colorSpace='rgb',  lineColor=[0,0,0], fillColor=[0,0,0],
                opacity=0.15, depth=0.0, interpolate=True))
      Begin Routine:
        mouse.clickReset()
        intarget = 0
        neartarget = 0
        matrix = ['participant', 'trial', 'timecode', 'ghost', 'target_size', 'cursor_size', 'targetx', 'targety', 'mousex', 'mousey', 'proximity']

        matrix = []
        for i, targetposition in enumerate(targetpositions):
            targetposition.setSize((target_size, target_size))
            targetposition.setPos((target_distance_from_origin * np.cos(2*np.pi/N_targets*i), target_distance_from_origin * np.sin(2*np.pi/N_targets*i)))
        starttime_of_trial = time.time()
      Each Frame:
        # *dummy target positions* updates
        for targetposition in targetpositions:
            if targetposition.status == NOT_STARTED and tThisFlip >= 0.0-frameTolerance:
                # keep track of start time/frame for later
                targetposition.frameNStart = frameN  # exact frame index
                targetposition.tStart = t  # local t and not account for scr refresh
                targetposition.tStartRefresh = tThisFlipGlobal  # on global time
                win.timeOnFlip(targetposition, 'tStartRefresh')  # time at next scr refresh
                # add timestamp to datafile
                thisExp.timestampOnFlip(win, 'targetposition.started')
                targetposition.setAutoDraw(True)

        # The mouse is really at
        [realmousex,realmousey] = mouse.getPos()

        # Calculate position for visible mouse
        mousex = round(realmousex*cos(rotation)+realmousey*sin(rotation))
        mousey = round(realmousey*cos(rotation)-realmousex*sin(rotation))

        # Full tracking for each trial
        matrix.append(expInfo['participant'])
        matrix.append(trials.thisN)
        matrix.append(np.round(time.time() - starttime_of_trial, 3))
        matrix.append(ghosttail) # not needed
        matrix.append(target_size) # not needed
        matrix.append(cursor_size) # not needed
        matrix.append(viewx) # target position x
        matrix.append(viewy) # target position y
        matrix.append(mousex)
        matrix.append(mousey)

        # Save position for previous 10 frames for tail
        oldmousex[frameN % 10] = mousex
        oldmousey[frameN % 10] = mousey


        for num in range(0,9):
            if ghosttail == 1 and frameN > 10:
                newghost.setPos([oldmousex[num] - 0.5*(oldmousex[num+1]-oldmousex[num]), oldmousey[num] - 0.5*(oldmousey[num+1]-oldmousey[num])], log=False)
                newghost.setSize([np.sqrt((oldmousex[num+1]-oldmousex[num])**2 + (oldmousey[num+1]-oldmousey[num])**2), 1], log=False)
                #newghost.setSize([(oldmousex[num+1]-oldmousex[num])/10, (oldmousey[num+1]-oldmousey[num])/10], log=False)
                current_angle = np.degrees(np.arctan((oldmousex[num+1]-oldmousex[num])/(oldmousey[num+1]-oldmousey[num] + 0.0001))) + 90
                newghost.setOri(current_angle, log=False)

            else:
                newghost.setPos([mousex, mousey], log=False)
                newghost.setSize([0,0], log=False)
            newghost.draw()

        # Frame by frame scoring
        #if mouse.isPressedIn(target):
        if mouseeventhelper.isPressedIn(mouse, target):
            intarget = intarget + 1
            buttons, times = mouse.getPressed(getTime=True)
            if trials.thisN == 0:
                started = 0
            else:
                started = 1
            matrix.append(3)
            continueRoutine = False
        elif target.contains(mouse):
            crosshair = 'crosshairs_red.png'
            intarget = intarget + 1
            matrix.append(2)
        elif target_outer.contains(mouse):
            crosshair = 'crosshairs_yellow.png'
            neartarget = neartarget + 1
            matrix.append(1)
        else:
            crosshair = 'crosshairs_black.png'
            matrix.append(0)
    PolygonComponent target_outer
      fillColor = $[0,0,0]
      lineColor = $[0,0,0]
      nVertices = 72
      opacity = 0
      pos [set every repeat] = $[polyx,polyy]
      shape = regular polygon...
      size [set every repeat] = [target_size, target_size]
      startVal [time (s)] = 0.0
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    PolygonComponent target
      fillColor [set every frame] = $[0,0,0]
      nVertices = 72
      opacity [set every frame] = 0.0
      pos [set every repeat] = $[polyx,polyy]
      shape = regular polygon...
      size [set every repeat] = [target_size + cursor_size, target_size + cursor_size]
      startVal [time (s)] = 0.0
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    PolygonComponent visible_target
      fillColor [set every repeat] = $polycol
      lineColor [set every repeat] = $polycol
      nVertices = 72
      pos [set every repeat] = [viewx, viewy]
      shape = regular polygon...
      size [set every repeat] = [target_size,target_size]
      startVal [time (s)] = 0.0
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    ImageComponent ghost
      disabled = True
      image = crosshairs_ghost.png
      startVal [time (s)] = 0.0
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    ImageComponent sights
      disabled = True
      image [set every frame] = $crosshair
      pos [set every frame] = $[mousex, mousey]
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    PolygonComponent newsights
      fillColor = black
      lineColor = black
      nVertices = 72
      ori = -45
      pos [set every frame] = $[mousex, mousey]
      shape = regular polygon...
      size [set every repeat] = (cursor_size, cursor_size)
      startVal [time (s)] = 0.0
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    PolygonComponent newghost
      fillColor = black
      lineColor = black
      shape = line
      size = (1, 0)
      startVal [time (s)] = 0.0
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  Routine intro
    TextComponent text_intro
      letterHeight = 30
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_intro
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine end
    TextComponent text_2
      color = black
      letterHeight = 25
      startVal [time (s)] = 0.0
      text = Press 'space' to end experiment.
      wrapWidth = 800
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    KeyboardComponent key_resp_3
      allowedKeys = 'space', 'q', 'esc'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent end_code
      Code Type = Py
      Begin Routine:
        for targetposition in targetpositions:
            targetposition.setAutoDraw(False)
  Routine centre
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextComponent instruct
      color = black
      letterHeight = 20
      pos = [0, 100]
      startVal [time (s)] = 0.0
      text = Please click your input device on the red target to start
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    PolygonComponent target_dot
      fillColor = $[1,-1,-1]
      lineColor = $[1,-1,-1]
      nVertices = 72
      pos [set every frame] = [intro_targetx, intro_targety]
      shape = regular polygon...
      size = [80,80]
      startVal [time (s)] = 0.0
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    CodeComponent code_start
      Code Type = Auto->JS
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      Begin Routine:
        realmousex = 0
        realmousey = 0

        intro_targetx = 0
        intro_targety = 0
        frame = 0
      Each Frame:
        [realmousex,realmousey] = mouse.getPos()
        # switch to shifted mouse for arrow pointer
        #mousex = realmousex+7
        #mousey = realmousey-11
        mousex = realmousex
        mousey = realmousey

        if introduction_loop.thisN == 0:
            intro_targetx = 125*np.cos(360/100000.*2*np.pi*frame)
            intro_targety = 125*np.sin(360/100000.*2*np.pi*frame)
            frame += 1

        #if mouse.isPressedIn(target_dot):
        if mouseeventhelper.isPressedIn(mouse, target_dot):
            continueRoutine = False
    ImageComponent pointer
      disabled = True
      image = Mouse_pointer_small.png
      pos [set every frame] = [mousex, mousey]
      startVal [time (s)] = 0.0
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    CodeComponent hide_mouse
      Code Type = Both
      Begin Experiment:
        win.mouseVisible = False
      Begin JS Experiment:
        document.body.style.cursor='none';
      End Experiment:
        win.mouseVisible = True
      End JS Experiment:
        document.body.style.cursor='auto';
    PolygonComponent circlepointer
      fillColor = black
      lineColor = black
      nVertices = 72
      pos [set every frame] = [mousex, mousey]
      shape = regular polygon...
      size = (20, 20)
      startVal [time (s)] = 0.0
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  Routine save
    CodeComponent code_data
      Code Type = Py
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      End Routine:
        thisExp.addData('len', len(matrix))
        thisExp.addData('polyx', polyx)
        thisExp.addData('polyy', polyy)
        thisExp.addData('xjump', xjump)
        thisExp.addData('yjump', yjump)
        thisExp.addData('realmousex', realmousex)
        thisExp.addData('realmousey', realmousey)
        thisExp.addData('rotation', rotation)
        thisExp.addData('ghost', ghosttail)
        thisExp.addData('viewx', viewx)
        thisExp.addData('viewy', viewy)
        thisExp.addData('mousex', mousex)
        thisExp.addData('mousey', mousey)
        thisExp.addData('frames_near', neartarget)
        thisExp.addData('frames_on', intarget)
        thisExp.addData('RT', round(1000*times[0]))

        if trials.thisN>0 and (trials.thisN)%shuffle_parameters_every == 0:
            target_size = randint(20,120)
            cursor_size = randint(5,80)
            target_distance_from_origin = randint(50, 200)

        # redraw targets
        for i, targetposition in enumerate(targetpositions):
            targetposition.setSize((target_size, target_size))
            targetposition.setPos((target_distance_from_origin * np.cos(2*np.pi/N_targets*i), target_distance_from_origin * np.sin(2*np.pi/N_targets*i)))

        # Calculate new target position
        all_target_positions = set(range(N_targets))
        all_target_positions.remove(old_target_pos_num)
        next_targetpos_num = np.random.choice(list(all_target_positions))
        old_target_pos_num = next_targetpos_num
        viewx, viewy = (target_distance_from_origin * np.cos(2*np.pi/N_targets*next_targetpos_num), target_distance_from_origin * np.sin(2*np.pi/N_targets*next_targetpos_num))
        polyx, polyy = viewx, viewy
        startx = mousex
        starty = mousey


        #xjump = randint(-jumplength,jumplength)
        #yjump = round(2*(randint(0,1)-.5)*(jumplength**2-xjump**2)**.5)
        #polyx = polyx + xjump
        #polyy = polyy + yjump
        #if abs(polyx) > jumplength:
        #    polyx = polyx - 2*xjump
        #    xjump = -xjump
        #if abs(polyy) > jumplength:
        #    polyy = polyy - 2*yjump
        #    yjump = -yjump
        #if trials.thisN == trials1:
        #    rotation = float(expInfo['rotation2'])
        #viewx = round(polyx*cos(rotation)+polyy*sin(rotation))
        #viewy = round(polyy*cos(rotation)-polyx*sin(rotation))
        #startx = mousex
        #starty = mousey
    CodeComponent code_save
      Code Type = Both
      End Routine:
        if started == 1:
            matrixsave = np.reshape(matrix,(-1,11))
            # mousedatafile = './data/fittsdata_'+expInfo['participant']+'_'+str(trials.thisN)+'.txt'
            # np.savetxt(mousedatafile, matrixsave,fmt='%s')

            mousedatafile = './data/fittsdata_'+expInfo['participant']+'.txt'

            f=open(mousedatafile,'ab')
            np.savetxt(f,matrixsave, fmt='%s')
            f.close()
    PolygonComponent newhit
      fillColor = -0.5294, 0.4039, -0.1137
      lineColor = -0.5294, 0.4039, -0.1137
      nVertices = 72
      pos [set every repeat] = (polyx, polyy)
      shape = regular polygon...
      size [set every repeat] = (target_size, target_size)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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    ImageComponent hit
      disabled = True
      image = explosion.png
      opacity [set every repeat] = $started
      pos [set every repeat] = $[viewx, viewy]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .05
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  Routine countdown
    TextComponent text_countdown
      color = black
      letterHeight = 40
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(10-int(t))
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  Routine instructions
    TextComponent text_instr
      letterHeight = 0.04
      pos = (-0.3, 0.25)
      startVal [time (s)] = 0.0
      text = $"This is a template" + " \n on how to use" + "\n the text component" + " \n to present instructions."
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    ImageComponent image_instr1
      image = instruct1.png
      pos = (-0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_instr2
      image = instruct2.png
      pos = (0.3, 0.3)
      startVal [time (s)] = 0.0
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    ImageComponent image_illus
      image = click.png
      pos = (0.3, 0)
      startVal [time (s)] = 0.0
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    ImageComponent image_next
      image = next.png
      pos = (0.6, -0.4)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      clickable = image_next
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine consent
  Routine PointerDemo
    ImageComponent Triangle_Pointer
      image = /Users/markus/Psychology/Bachelor Thesis/Code/fittslaw_revisited/resources/TriangleCursor.png
      ori [set every frame] = cursor_orientation
      pos [set every frame] = [mousex, mousey]
      startVal [time (s)] = 0.0
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    CodeComponent tracking_code
      Code Type = Auto->JS
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      Before Experiment:
        cursor_orientation = 0
      Each Frame:
        [realmousex,realmousey] = mouse.getPos()
        # switch to shifted mouse for arrow pointer
        mousex = realmousex+8
        mousey = realmousey

        mousex = realmousex
        mousey = realmousey

        buttons = mouse.getPressed()

        if mouseeventhelper.getPressed(mouse):
            cursor_orientation += 45
            if cursor_orientation > 360:
                continueRoutine = False
Flow
  LoopInitiator introduction_loop loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine centre
  LoopTerminator introduction_loop
  Routine PointerDemo
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = $alltrials
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    Routine trial
    Routine save
  LoopTerminator trials
  Routine end
